PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = seq_teaching_exp
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Routines
  Routine Performance_1
    TextComponent perf1_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Performance phase 1
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    ImageComponent perf1_ex1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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  Routine Briefing
    TextComponent gen_info
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Some initial general information:

        TBC
    ButtonComponent brf_btn
      bold = True
      borderColor = black
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Next
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    CodeComponent btn_conf
      Code Type = Py
      Before Experiment:
        import time
        LOCK_ON=True
        LOCK_OFF=False
        btn_locks={}
  Routine Raven_Matrices
    TextComponent rv_txt1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Pre-training phase
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    ButtonComponent rv_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 600.0
      text = Next
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  Routine Debriefing
    TextComponent debrf_info
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for participating in this experiment.

        We would like to know some information about you.

        All records will be kept strictly confidental (privacy statement TBC).

        Please click the relevant option for you concerning your background.
    ButtonComponent debrf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Finish
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  Routine Training_1
    TextComponent train1_txt1
      letterHeight = 0.03
      pos = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent train1_btn3
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (-0.5, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'train1_btn3' in btn_locks and btn_locks['train1_btn3']:
                            btn_locks['train1_btn3'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent train1_ex3
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      opacity = 0
      pos = (-0.5, 0.1)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train1_btn2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.5, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train1_btn2' in btn_locks and btn_locks['train1_btn2']:
                            train1_ex2.setOpacity(0.0)
                            train1_btn2.setOpacity(0.0)
                            train1_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            train1_btn3.setOpacity(1.0)

                            btn_locks['train1_btn3'] = LOCK_ON
                            btn_locks['train1_btn2'] = LOCK_OFF
    ImageComponent train1_ex2
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      opacity = 0
      pos = (-0.5, 0.1)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train1_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.5, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train1_btn1' not in btn_locks:
                            train1_ex1.setOpacity(0.0)
                            train1_btn1.setOpacity(0.0)
                            train1_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            train1_btn2.setOpacity(1.0)

                            btn_locks['train1_btn2'] = LOCK_ON
                            btn_locks['train1_btn1'] = LOCK_OFF
    ImageComponent train1_ex1
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      pos = (-0.5, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train1_bg1
      color = $[255,255,255]
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      pos = (0.4, 0.3)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train1_bg2
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      pos = (0.4, -0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Instructions_1
    TextComponent instr1_txt1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Some instructions for the performance questions
    ButtonComponent instr1_btn3
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'instr1_btn3' in btn_locks and btn_locks['instr1_btn3']:
                            btn_locks['instr1_btn3'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent instr1_ex3
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      opacity = 0
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'instr1_btn2' in btn_locks and btn_locks['instr1_btn2']:
                            instr1_ex2.setOpacity(0.0)
                            instr1_btn2.setOpacity(0.0)
                            instr1_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            instr1_btn3.setOpacity(1.0)

                            btn_locks['instr1_btn3'] = LOCK_ON
                            btn_locks['instr1_btn2'] = LOCK_OFF
    ImageComponent instr1_ex2
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      opacity = 0
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'instr1_btn1' not in btn_locks:
                            instr1_ex1.setOpacity(0.0)
                            instr1_btn1.setOpacity(0.0)
                            instr1_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            instr1_btn2.setOpacity(1.0)

                            btn_locks['instr1_btn2'] = LOCK_ON
                            btn_locks['instr1_btn1'] = LOCK_OFF
    ImageComponent instr1_ex1
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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Flow
  Routine Briefing
  Routine Raven_Matrices
  Routine Instructions_1
  Routine Training_1
  Routine Debriefing
